PsychoPy2experiment version="2020.1.0"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = AOC
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = trk-encoding
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Routines
  Routine select_stimuli_table
    TextComponent setup_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $stimuli_table
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    CodeComponent select_trials
      Code Type = Both
      Begin Experiment:
        tables = [0]
        selected = np.random.choice(tables)
        selected = str(selected)
        stimuli_table = 'stimuli_tables/encoding_trials_'+ selected + '.csv'
      Begin JS Experiment:
        tables = [0];
        selected = tables[Math.floor(Math.random() * tables.length)];
        selected = selected.toString();
        stimuli_table = (("stimuli_tables/encoding_trials_" + selected) + ".csv");
    CodeComponent selection_setup
      Code Type = Auto->JS
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      Begin Routine:
        start = 0
        end = 0
        step = 1
  Routine take_selection
    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        start = end;
        end = (start + 5);
        selection = Array.from({length: end - start}, (_, index) => index + start)
      Begin Routine:
        start = end
        end = start + 5
        selection = np.arange(start, end, step)
  Routine pause
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Szünet
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  Routine trial
    ImageComponent main_image
      image [set every repeat] = $TripletMemberA
      pos [set every repeat] = (Xcoordinate,Ycoordinate)
      size = (300, 300)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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Flow
  Routine select_stimuli_table
  LoopInitiator runs loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    Routine take_selection
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = $selection
      conditionsFile = $stimuli_table
      loopType = sequential
      nReps = 1
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      Routine trial
    LoopTerminator trials
    Routine pause
  LoopTerminator runs
